OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)
Settings
  Input File = ${Player_ScenarioDirectory}/Signals/file.gdf

GDF file reader => #0
  Filename = $var{Input File}
  Samples per buffer = 32
  Subtract physical minimum = false
#0.EEG stream -> Timeout
  Timeout delay = 10
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
CSV File Reader => #3
  Filename = $var{Input File}-stim.csv
Signal=#0.EEG stream, Stimulation=#3 -> GDF file writer
  Filename = $var{Input File}-output.gdf
