OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)
Settings
  Input File = ${Player_ScenarioDirectory}/Signals/file.gdf
  Input File 2 = ${Player_ScenarioDirectory}/Signals/file.ov

GDF file reader => #0
  Filename = $var{Input File}
  Samples per buffer = 32
#0.EEG stream -> Timeout
  Timeout delay = 10
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
#0.Stimulations -> CSV File Writer
  Filename = $var{Input File}-stim.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Generic stream reader => #4
  Filename = $var{Input File 2}
Signal=#0.EEG stream, Stimulation=#4.Output Stimulations -> GDF file writer
  Filename = $var{Input File}-output.gdf
#4.Output Stimulations -> CSV File Writer
  Filename = $var{Input File 2}-stim.csv
  Precision = 10
  Append data = false
  Only last matrix = false
